
// Copyright © 2017, Université catholique de Louvain
// All rights reserved.
// 
// Copyright © 2017 Forschungszentrum Jülich GmbH
// All rights reserved.
// 
// Developers: Guillaume Lobet
// 
// Redistribution and use in source and binary forms, with or without modification, are permitted under the GNU General Public License v3 and provided that the following conditions are met:
// 
// 1. Redistributions of source code must retain the above copyright notice, this list of conditions and the following disclaimer.
//
// 2. Redistributions in binary form must reproduce the above copyright notice, this list of conditions and the following disclaimer in the documentation and/or other materials provided with the distribution.
//
// 3. Neither the name of the copyright holder nor the names of its contributors may be used to endorse or promote products derived from this software without specific prior written permission.
//
// Disclaimer
//
// THIS SOFTWARE IS PROVIDED BY THE COPYRIGHT HOLDERS AND CONTRIBUTORS "AS IS" AND ANY EXPRESS OR IMPLIED WARRANTIES, INCLUDING, BUT NOT LIMITED TO, THE IMPLIED WARRANTIES OF MERCHANTABILITY AND FITNESS FOR A PARTICULAR PURPOSE ARE DISCLAIMED. IN NO EVENT SHALL THE COPYRIGHT HOLDER OR CONTRIBUTORS BE LIABLE FOR ANY DIRECT, INDIRECT, INCIDENTAL, SPECIAL, EXEMPLARY, OR CONSEQUENTIAL DAMAGES (INCLUDING, BUT NOT LIMITED TO, PROCUREMENT OF SUBSTITUTE GOODS OR SERVICES; LOSS OF USE, DATA, OR PROFITS; OR BUSINESS INTERRUPTION) HOWEVER CAUSED AND ON ANY THEORY OF LIABILITY, WHETHER IN CONTRACT, STRICT LIABILITY, OR TORT (INCLUDING NEGLIGENCE OR OTHERWISE) ARISING IN ANY WAY OUT OF THE USE OF THIS SOFTWARE, EVEN IF ADVISED OF THE POSSIBILITY OF SUCH DAMAGE.
// 
// You should have received the GNU GENERAL PUBLIC LICENSE v3 with this file in license.txt but can also be found at http://www.gnu.org/licenses/gpl-3.0.en.html
// 
// NOTE: The GPL.v3 license requires that all derivative work is distributed under the same license. That means that if you use this source code in any other program, you can only distribute that program with the full source code included and licensed under a GPL license.
 

setBatchMode(true);
waitTime = 0;


dir = getDirectory("Where are your images");
dir1 = getDirectory("Where are you want to save the converted images");

list = getFileList(dir);
num = list.length;

print(num+" images to analyse");

for(k = 0 ;k < num ; k++){

	t = dir + list[k];
	//print(list[k]);
	open(t);
	ti=getTitle();
	run("8-bit");
	run("Set Measurements...", "mean standard redirect=None decimal=4");
	run("Measure");
	avg = getResult("Mean", 0) * 0.8;
	run("Clear Results");
	run("Subtract...", "value="+avg);
	run("Multiply...", "value=3");
	run("Invert");
	run("Smooth"); 
	
//	run("Invert");
	//run("Auto Local Threshold", "method=Sauvola radius=15 parameter_1=0.1 parameter_2=0");
//	setAutoThreshold("Default dark");
//	setOption("BlackBackground", false);
//	run("Convert to Mask");
//	run("Make Binary");

	


	for(i = 0; i < 1; i++) run("Mean...", "radius=2");
//	run("Invert");
//	run("Invert LUT");
	
	saveAs("Tiff", dir1+list[k]);
	close();
	print(num-k+" images left to analyse");
}

print("Done");










